# 1 "C:/Bruker/TOPSPIN2.1/exp/stan/nmr/lists/pp/zgpg30"
;zgpg30
;avance-version (07/04/03)
;1D sequence with power-gated decoupling
;using 30 degree flip angle
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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

"d11=30m"


"DELTA=d1-100m"


"acqt0=-p1*0.66/3.1416"


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define delay MCWRK
define delay MCREST
"MCWRK = 0.333333*30m"
"MCREST = 30m - 30m"
    dccorr
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1 ze
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  d11 pl12:f2
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2 MCWRK  * 2 do:f2
LBLF0, MCWRK 
  MCREST
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  10u pl13:f2
  d11 cpd2:f2
  DELTA
  4u do:f2
  10u pl12:f2
  100m cpd2:f2
  p1*0.33 ph1
  go=2 ph31
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  MCWRK do:f2 pl13:f2 wr #0
  MCWRK zd 
  lo to LBLF0 times td0

  MCWRK
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exit


ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl13: f2 channel - power level for second CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;NS: 1 * n, total number of scans: NS * TD0
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;$Id: zgpg30,v 1.10 2007/04/11 13:34:31 ber Exp $
