# 1 "/u/exp/stan/nmr/lists/pp/zgpg30"
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;zgpg30
;avance-version (00/02/07)
;1D sequence with power-gated decoupling
;using 30 degree flip angle


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;Avance.incl
;
;version  00/07/27


;switch between high and low stage oh H amplifier


;use 2H channel for lock or pulse (lockswitch)


;allow for 2H decoupling (lockswitch)


;turn lock-hold on/off (BSMS)


;switch between 1H or 19F output (H amplifier)


;select output for 19F (amplifier)


;homospoil on/off (BSMS)


;for Q-switch probes


;for mixing probe


;gating pulse for RX22, ADC and HPPR


;not active


;$Id: Avance1.incl,v 1.1.2.5 2000/08/16 13:28:44 ber Exp $
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
"d11=30m"

"d12=20u"


1 ze
2 d12 pl13:f2 
  d1 cpd2:f2
  d12 pl12:f2
  p1*0.33 ph1
  go=2 ph31
  wr #0
  d11 do:f2
exit

ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl13: f2 channel - power level for second CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;$Id: zgpg30,v 1.1.8.5 2000/05/08 14:09:34 eng Exp $
