# 1 "C:/Bruker/TopSpin3.6.2/exp/stan/nmr/lists/pp/zg30"
;zg30
;avance-version (18/04/13)
;1D sequence
;using 30 degree flip angle
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=
;$RECOMMEND=y


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"p0=p1/3"


"acqt0=-tan((p0/p1)*(PI/4))*p1*2/PI"
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; dimension 1D; AQ_mode 
define delay MCWRK
define delay MCREST
"MCREST = 30m - 30m"
"MCWRK = 0.333333*30m"

    dccorr
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1 ze
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2 MCWRK  * 2
LBLF0, MCWRK
  MCREST
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  d1
  p0 ph1
  go=2 ph31
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  MCWRK wr #0
  MCWRK zd
  lo to LBLF0 times td0

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exit


ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1
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;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;ns: 1 * n, total number of scans: NS * TD0


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;$Id: zg30,v 1.12.2.2 2018/04/13 14:28:42 ber Exp $
